includeFile = Materials.txt

# Cell Culture Plate

s:Ge/CellCulturePlate/Parent            = "World"
s:Ge/CellCulturePlate/Type              = "CellCulturePlate"
s:Ge/CellCulturePlate/Material          = "Lucite"
s:Ge/CellCulturePlate/DrawingStyle 	    = "Solid"
#b:Ge/CellCulturePlate/PrintInformation = "True"

i:Ge/CellCulturePlate/numberOfColumns   = 6
i:Ge/CellCulturePlate/numberOfRows      = 4
d:Ge/CellCulturePlate/wellsHeight       = 17.5 mm
d:Ge/CellCulturePlate/wellsInnerDiametr = 15.5 mm
d:Ge/CellCulturePlate/wellsOuterDiametr = 17.7 mm
i:Ge/CellCulturePlate/numberOfPlates    = 1
d:Ge/CellCulturePlate/plateWidth        = 127.6 mm
d:Ge/CellCulturePlate/plateLength       = 85.4 mm
d:Ge/CellCulturePlate/plateHeigth       = 20.2 mm
d:Ge/CellCulturePlate/plateThickness    = 1.0 mm
d:Ge/CellCulturePlate/gapBetweenWells   = 1.0 mm
