#===================================================
# Graphics
#===================================================
iv:Gr/Color/TransparentRed  = 4 255 0 255 200
iv:Gr/Color/TransparentBlue = 4 0 0 255 200

s:Gr/ViewA/Type              = "OpenGL"
i:Gr/ViewA/WindowSizeX       = 1400
i:Gr/ViewA/WindowSizeY       = 700
u:Gr/ViewA/Zoom              = 2.0
d:Gr/ViewA/Theta             = 90 deg
d:Gr/ViewA/Phi               = 90 deg

s:Gr/ViewB/Type              = "OpenGL"
i:Gr/ViewB/WindowSizeX       = 1400
i:Gr/ViewB/WindowSizeY       = 700
u:Gr/ViewB/Zoom              = 2.0
d:Gr/ViewB/Theta             = 45 deg
d:Gr/ViewB/Phi               = 45 deg


#includeFile = Viewer.txt
#===================================================
# Geometry
#===================================================
b:Ge/CheckForOverlaps       = "True"
includeFile = Materials.txt
#---------------------------------------------------
# World
#---------------------------------------------------

d:Ge/World/HLX = 3.0 m
d:Ge/World/HLY = 3.0 m
d:Ge/World/HLZ = 8.0 m
s:Ge/World/Material = "Air"
s:Ge/World/DrawingStyle = "FullWireFrame"
#---------------------------------------------------
# BeamPipe
#---------------------------------------------------
s:Ge/BeamPipeBody/Parent    = "World"
s:Ge/BeamPipeBody/Type = "TsCylinder"
s:Ge/BeamPipeBody/Material = "Vacuum"
d:Ge/BeamPipeBody/RMin         =    0. mm
d:Ge/BeamPipeBody/RMax         =    3. cm
d:Ge/BeamPipeBody/HL           =   2.5 cm
d:Ge/BeamPipeBody/SPhi         =    0. deg
d:Ge/BeamPipeBody/DPhi         =  360. deg
d:Ge/BeamPipe/BodyTransX       =    0. m
d:Ge/BeamPipeBody/TransY       =    0. m
d:Ge/BeamPipeBody/TransZ       =  -411. cm
s:Ge/BeamPipeBody/Color = "red"
s:Ge/BeamPipeBody/DrawingStyle = "FullWireFrame"

s:Ge/ExitWindow/Parent       = "BeamPipeBody"
s:Ge/ExitWindow/Type         = "TsCylinder"
s:Ge/ExitWindow/Material     = "Aluminum"
d:Ge/ExitWindow/RMin         =   0. mm
d:Ge/ExitWindow/RMax         =   Ge/BeamPipeBody/RMax cm
d:Ge/ExitWindow/HL           =   0.05225 cm # 0.5*0.1045 cm
d:Ge/ExitWindow/SPhi         =   0. deg
d:Ge/ExitWindow/DPhi         =   360. deg
d:Ge/ExitWindow/TransZ       =  Ge/BeamPipeBody/HL - Ge/ExitWindow/HL cm
s:Ge/ExitWindow/Color = "skyblue"
s:Ge/ExitWindow/DrawingStyle = "Solid"

#---------------------------------------------------
# graphiteCollimator
#---------------------------------------------------
includeFile = GeometryComponents/graphite_Collimator.txt
d:Ge/graphiteCollimator/TransZ   = -340.0 cm

#---------------------------------------------------
#primaryScatterer
#---------------------------------------------------
includeFile = GeometryComponents/primaryScatterer.txt
d:Ge/primaryScatterer/TransZ   = -325.25 cm

#---------------------------------------------------

#---------------------------------------------------
#Wall
#---------------------------------------------------
s:Ge/Wall/Parent = "World"
s:Ge/Wall/Type = "wallwithahole"
s:Ge/Wall/Material = "Conrete"
d:Ge/Wall/HLX = 2.0  m
d:Ge/Wall/HLY = 2.0  m
d:Ge/Wall/HLZ = 60.0 cm
d:Ge/Wall/RMin = 0. mm
d:Ge/Wall/RMax = 10. cm
d:Ge/Wall/HoleRotY = 0.05 rad #0.3764 rad
d:Ge/Wall/RotY = 0.05 rad #0.3764 rad
d:Ge/Wall/TransZ = -67.15 cm
s:Ge/Wall/DrawingStyle = "FullWireFrame"#"Solid"

s:Ge/MetalTube/Parent = "World"
s:Ge/MetalTube/Type = "TsCylinder"
s:Ge/MetalTube/Material = "Steel"
d:Ge/MetalTube/HL   = 64.15 cm
d:Ge/MetalTube/RMin = 5. cm
d:Ge/MetalTube/RMax = Ge/Wall/RMax cm
d:Ge/MetalTube/TransZ = Ge/Wall/TransZ  cm
s:Ge/MetalTube/DrawingStyle = "Solid"

s:Ge/PolyCarbon/Parent = "MetalTube"
s:Ge/PolyCarbon/Type = "TsCylinder"
s:Ge/PolyCarbon/Material = "Polyethylene"
d:Ge/PolyCarbon/HL   = Ge/MetalTube/HL - 3. cm
d:Ge/PolyCarbon/RMin = Ge/MetalTube/RMin + 5. mm
d:Ge/PolyCarbon/RMax = Ge/MetalTube/RMax - 5. mm
s:Ge/PolyCarbon/DrawingStyle = "Solid"

#---------------------------------------------------
#secondaryScatterer
#---------------------------------------------------
includeFile = GeometryComponents/contouredScatterer.txt
d:Ge/contouredScatterer/TransZ   = 10.5 cm
#---------------------------------------------------
# PhaseSpace 1
#---------------------------------------------------
#includeFile = PhaseSpace/PhSp_2ndScatterer.txt

s:Ge/PhSp1/Type     = "TsBox"
s:Ge/PhSp1/Parent   = "World"
s:Ge/PhSp1/Material = "G4_AIR"
d:Ge/PhSp1/HLX      = 50.0 cm
d:Ge/PhSp1/HLY      = 50.0 cm
d:Ge/PhSp1/HLZ      = 1.0 mm
d:Ge/PhSp1/TransZ   = 20. cm
s:Ge/PhSp1/Color    = "skyblue"

s:Sc/PhaseSpaceAtFilm/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpaceAtFilm/OutputToConsole             = "False"
s:Sc/PhaseSpaceAtFilm/Surface                     = "PhSp1/ZMinusSurface"
s:Sc/PhaseSpaceAtFilm/OutputType                  = "Binary" # ASCII, Binary, Limited or ROOT
s:Sc/PhaseSpaceAtFilm/OutputFile                  = "Results/BinaryOutput"
#s:Sc/PhaseSpaceAtVacFilm/OutputType                  = "ROOT" # ASCII, Binary, Limited or ROOT
#s:Sc/PhaseSpaceAtVacFilm/OutputFile                  = "ROOTOutput"
i:Sc/PhaseSpaceAtFilm/OutputBufferSize            = 1000000000
s:Sc/PhaseSpaceAtFilm/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpaceAtFilm/IncludeTOPASTime            = "True"
b:Sc/PhaseSpaceAtFilm/IncludeTimeOfFlight         = "True"
b:Sc/PhaseSpaceAtFilm/IncludeRunID                = "True"
b:Sc/PhaseSpaceAtFilm/IncludeEventID              = "True"
b:Sc/PhaseSpaceAtFilm/IncludeTrackID              = "True"
b:Sc/PhaseSpaceAtFilm/IncludeParentID             = "True"
b:Sc/PhaseSpaceAtFilm/IncludeVertexInfo           = "True"
b:Sc/PhaseSpaceAtFilm/IncludeSeed                 = "True"
#sv:Sc/PhaseSpaceAtFilm/OnlyIncludeParticlesNamed = 1 "Proton"
s:Sc/PhaseSpaceAtFilm/IfOutputFileAlreadyExists   = "Overwrite" #"Increment" # "Overwrite"

#---------------------------------------------------
# Ridgefilter
#---------------------------------------------------
includeFile = GeometryComponents/RidgeFilter_209MeV_5cm.txt
d:Ge/RidgeFilter/TransZ = 100 cm
d:Ge/RidgeFilter/RotX = 180 deg
# d:Ge/RidgeFilter/RotZ = 90 deg


#---------------------------------------------------
# waterTank
#---------------------------------------------------
#includeFile = GeometryComponents/WaterTank.txt
includeFile = GeometryComponents/WaterTankWithPlate.txt
d:Ge/wTankBody/TransZ   = 257. cm
#===================================================
# Physics
#===================================================
sv:Ph/Default/Modules       = 1 "g4em-standard_opt0"

# sv:Ph/Default/Modules       = 8 "g4em-standard_opt4" "g4decay" "g4radioactivedecay" "g4ion-binarycascade"  "g4em-extra" "g4h-elastic_HP" "g4stopping" "g4h-phy_QGSP_BIC_AllHP"

#===================================================
# Beam
#===================================================

# s:So/Example/Type                            = "PhaseSpace"
# s:So/Example/PhaseSpaceFileName              = "BinaryOutput"
# s:So/Example/Component                       = "World"
# #i:So/Example/PhaseSpaceMultipleUse          = 2
# b:So/Example/PhaseSpaceIncludeEmptyHistories = "True"

s:So/MySource/Type = "Beam" # Beam, Isotropic, Emittance or PhaseSpace
s:So/MySource/Component = "BeamPosition"
s:So/MySource/BeamParticle = "proton"
d:So/MySource/BeamEnergy = 209.0 MeV
u:So/MySource/BeamEnergySpread = 0.01
s:So/MySource/BeamPositionDistribution = "Flat" # None, Flat or Gaussian
s:So/MySource/BeamPositionCutoffShape = "Ellipse" # Rectangle or Ellipse (if Flat or Gaussian)
d:So/MySource/BeamPositionCutoffX = 0.1 cm # X extent of position (if Flat or Gaussian)
d:So/MySource/BeamPositionCutoffY = 0.1 cm # Y extent of position (if Flat or Gaussian)
d:So/MySource/BeamPositionSpreadX = 3.0 cm # distribution (if Gaussian)
d:So/MySource/BeamPositionSpreadY = 3.0 cm # distribution (if Gaussian)
s:So/MySource/BeamAngularDistribution = "Gaussian" # None, Flat or Gaussian
d:So/MySource/BeamAngularCutoffX = 90. deg # X cutoff of angular distrib (if Flat or Gaussian)
d:So/MySource/BeamAngularCutoffY = 90. deg # Y cutoff of angular distrib (if Flat or Gaussian)
d:So/MySource/BeamAngularSpreadX = 0.0032 rad # X angular distribution (if Gaussian)
d:So/MySource/BeamAngularSpreadY = 0.0032 rad # Y angular distribution (if Gaussian)


s:Ge/BeamPosition/Parent="BeamPipeBody"
s:Ge/BeamPosition/Type="Group"
d:Ge/BeamPosition/TransX=0. m
d:Ge/BeamPosition/TransY=0. m
d:Ge/BeamPosition/TransZ= 0. m
d:Ge/BeamPosition/RotX=0. deg
d:Ge/BeamPosition/RotY=0. deg
d:Ge/BeamPosition/RotZ=180. deg
#
#


#===================================================
# Overall TOPAS control
#===================================================
Ts/NumberOfThreads          = 0 # Change to 0 to use all available threads
b:Ts/ShowCPUTime            = "True"
i:Ts/RunVerbosity = 0
i:Ts/ShowHistoryCountAtInterval = 100
i:So/MySource/NumberOfHistoriesInRun = 100
#b:Gr/Enable = "False"
Ts/UseQt = "True"
b:Ts/PauseBeforeQuit        = Gr/Enable
